PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = My_experiment
  keyboardBackend = ioHub
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Routines
  Routine No_label
    ImageComponent no_tag_image
      size = (1.6, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Start
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import os

        dir_path = './Products'
        files = os.listdir(dir_path)

        no_tag_files = []
        tag_files = []

        for file in files:
            results = file.split('Slide_')
            results = results[1].split('.png')
        #     print(int(results[0]))
            if int(results[0])%4==1:
                no_tag_files.append(file)
            else:
                tag_files.append(file)

        num_products = len(no_tag_files)
        no_tags = len(tag_files)
    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome
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  Routine Dis_or_Like
    TextComponent Do_you_like
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Do you like the product?
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = "Dislike", "Like"
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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  Routine Thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thanks
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Flow
  Routine Start
  LoopInitiator preference_loop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine No_label
    Routine Dis_or_Like
  LoopTerminator preference_loop
  Routine Thanks
